PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tempdiscmoment
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"Rs. " + str(reward_today) + " today" + " or" + " Rs." + " " + str(future_reward) + " " + str(preposition) + " " + str(delay) + " " + str(unit) + "?"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = disc12.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Serial_Number': 1, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 47, 'unit': 'months', 'delay_in_days': 1410},
      {'Serial_Number': 2, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 58, 'unit': 'days', 'delay_in_days': 58},
      {'Serial_Number': 3, 'reward_today': 53, 'future_reward': 897, 'preposition': 'on', 'delay': 'December 31, 2024', 'unit': ' ', 'delay_in_days': 365},
      {'Serial_Number': 4, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 3, 'unit': 'weeks', 'delay_in_days': 21},
      {'Serial_Number': 5, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 4, 'unit': 'months', 'delay_in_days': 120},
      {'Serial_Number': 6, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 19, 'unit': 'weeks', 'delay_in_days': 133},
      {'Serial_Number': 7, 'reward_today': 53, 'future_reward': 897, 'preposition': 'on', 'delay': 'December 20, 2026', 'unit': ' ', 'delay_in_days': 1095},
      {'Serial_Number': 8, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 15, 'unit': 'days', 'delay_in_days': 15},
      {'Serial_Number': 9, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 8, 'unit': 'months', 'delay_in_days': 240},
      {'Serial_Number': 10, 'reward_today': 53, 'future_reward': 897, 'preposition': 'in', 'delay': 7, 'unit': 'weeks', 'delay_in_days': 49}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
    Routine trial
  LoopTerminator trials
